<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.3.0">
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision" xmlns="https://horizongir.org/bonsai">
    <Nodes>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="Zip" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:ConvertColor">
          <q1:Conversion>Bgr2Rgba</q1:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CameraCapture">
          <q1:Index>0</q1:Index>
          <q1:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HsvThreshold">
          <q1:Lower>
            <q1:Val0>100</q1:Val0>
            <q1:Val1>140</q1:Val1>
            <q1:Val2>40</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Lower>
          <q1:Upper>
            <q1:Val0>125</q1:Val0>
            <q1:Val1>157</q1:Val1>
            <q1:Val2>99</q1:Val2>
            <q1:Val3>255</q1:Val3>
          </q1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HsvThreshold">
          <q1:Lower>
            <q1:Val0>90</q1:Val0>
            <q1:Val1>87</q1:Val1>
            <q1:Val2>155</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Lower>
          <q1:Upper>
            <q1:Val0>119</q1:Val0>
            <q1:Val1>100</q1:Val1>
            <q1:Val2>186</q1:Val2>
            <q1:Val3>255</q1:Val3>
          </q1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Source.Centroid</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:HsvThreshold">
          <q1:Lower>
            <q1:Val0>210</q1:Val0>
            <q1:Val1>155</q1:Val1>
            <q1:Val2>45</q1:Val2>
            <q1:Val3>0</q1:Val3>
          </q1:Lower>
          <q1:Upper>
            <q1:Val0>255</q1:Val0>
            <q1:Val1>186</q1:Val1>
            <q1:Val2>70</q1:Val2>
            <q1:Val3>255</q1:Val3>
          </q1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>100</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>100</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:FindContours">
          <q1:Mode>External</q1:Mode>
          <q1:Method>ChainApproxNone</q1:Method>
          <q1:Offset>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
          </q1:Offset>
          <q1:MinArea>100</q1:MinArea>
          <q1:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>3</q1:Width>
            <q1:Height>3</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>2</q1:Iterations>
          <q1:Operation>Dilate</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>3</q1:Width>
            <q1:Height>3</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>2</q1:Iterations>
          <q1:Operation>Dilate</q1:Operation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:MorphologicalOperator">
          <q1:Size>
            <q1:Width>3</q1:Width>
            <q1:Height>3</q1:Height>
          </q1:Size>
          <q1:Anchor>
            <q1:X>1</q1:X>
            <q1:Y>1</q1:Y>
          </q1:Anchor>
          <q1:Shape>Rectangle</q1:Shape>
          <q1:Iterations>2</q1:Iterations>
          <q1:Operation>Dilate</q1:Operation>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge>
        <From>1</From>
        <To>0</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>2</From>
        <To>14</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>3</From>
        <To>1</To>
        <Label>Source3</Label>
      </Edge>
      <Edge>
        <From>4</From>
        <To>1</To>
        <Label>Source2</Label>
      </Edge>
      <Edge>
        <From>5</From>
        <To>1</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>5</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>7</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>9</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>6</From>
        <To>12</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>7</From>
        <To>20</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>8</From>
        <To>17</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>9</From>
        <To>19</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>10</From>
        <To>1</To>
        <Label>Source4</Label>
      </Edge>
      <Edge>
        <From>11</From>
        <To>18</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>12</From>
        <To>21</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>13</From>
        <To>2</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>14</From>
        <To>4</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>15</From>
        <To>8</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>16</From>
        <To>11</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>17</From>
        <To>3</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>18</From>
        <To>10</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>19</From>
        <To>15</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>20</From>
        <To>13</To>
        <Label>Source1</Label>
      </Edge>
      <Edge>
        <From>21</From>
        <To>16</To>
        <Label>Source1</Label>
      </Edge>
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Reactive.Zip, Bonsai.Core, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.BinaryRegionAnalysis, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.ConvertColor, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.CameraCapture, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.HsvThreshold, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.FindContours, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.LargestBinaryRegion, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Vision.MorphologicalOperator, Bonsai.Vision, Version=2.3.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>